
//Template for layer V prefrontal pyramidal neurons
zindex=0


func num2ind(){ // a mapping from numbers to morphology file indices
    return ($1 % 56)
}

begintemplate PCcell
external PARALLEL,PLOT,DEBUG, pprintStr, pprint
//external nPCcells
//external basal_fAHP
//external basal_sAHP
//external PcellIDlist
create soma[1], axon[7], dend[50], apic[27] 
public gid
public ApicNo, DendNo //OBJECT: properties of the cell
public position, x, y, z

public all, somatic, axonal, basal, apical, soma, axon, dend, apic
//Objects initialized in size of CURRENT morphologies!!
// see page 372 of neuron book. In templates, the size of objects must be declared in the template 
//create soma[nPCcells], axon[7*nPCcells], dend[50*nPCcells], apic[27*nPCcells] 
// HARDCODED BECAUSE OF THE F#&*#$ NEURON:
//create soma[40], axon[280], dend[2000], apic[1080]

public PCsoma_list ,PCbasal_list,PCapical_list ,PCdend_list ,PCcell_list, cell0_list
objref all, somatic, axonal, basal, apical //why objref and not external? (is external not for objects?)

strdef sectype
objref CAN_temp, CAL_temp, CAT_temp, KAD_temp, KAP_temp, NA_temp

// Initializing Procedure:
proc init() {
	create soma[1], axon[7], dend[50], apic[27] 

	if(PARALLEL){gid=$1}
	x = y = z = 0 // only change via position

	maximum_segment_length=75
	//zindex=$1*100
	if(DEBUG){
		sprint(pprintStr,"loading morphology from file %s\n",$s2)
		print pprintStr
	}
	if(!xopen($s2)){print "ERROR	Failed to import morphology from file!"}

	//OBJECT: properties of the cell
	//MUST BE INITIALIZED !!!
	ApicNo=0
	DendNo=0
	max_ar2=0
	min_ar2=0
	decay_start=0   
	decay_end=0

	// Set passive membrane properties
	Rm_default=30000 
	Rm_dend=15000
	Ra_default= 100	//MARIA 210	
	Cm_default = 1.2	
	Cm_dend = 2.0
	v_init = -66

	// SEVERELY affects experiment results
	celsius=34
	//$o1.defvar("general", "celsius", "34","Temperature of slice.")    
	//celcius = 34    Da fuck is that?!?

	//$o1.xopen_library("Terrence","cut-sections")
	cut_sections(maximum_segment_length)

	// make 3-d mapping of cell sections
	//$o1.xopen_library("Terrence","map-segments-to-3d")

	//map_segments_to_3d() necessary?

	// prepare to make a graph with cell configuration
	//$o1.tmpo2=new Shape()

	// Set initial conductance values 

	//Sodium - Potassium properties
	gna_default = 0.031 	 //STEFANOS
	gkdrbar_default=0.045      //*0.12//STEFANOS :DONG, WHITE, 2003 

	//Calcium currents
	soma_caN = 0.3e-4        //STEFANOS
	soma_caL = 3e-4 //20
	soma_car = 3e-5*25  *0.5 //FOR RS	//MARIA 3e-5
	soma_caT = 1e-5*10 //MARIA 1e-5	

	//Calcium activated K+ currents
	soma_kca =  0.8	// 0.005*5*0.5      //*3.5//STEFANOS:villalobos 2005 //*6 	//MARIA 0.025	
	mykca_init = 0.006*5*0.001  //* 0.1//STEFANOS EDIT    //MARIA 0.003

	//Potassium current

	kad_init =  0.00075*1.2    //*8 //STEFANOS:DONG,WHITE,2003  //MARIA 0.00075 	 	
	soma_kdBG =  0.0012*4.4      //*0.003 //STEFANOS:DONG,WHITE,2003  //MARIA 0.0012
	soma_hbar =  1.872e-5*0.5    	//MARIA 1.872e-5

	//Persistent sodium
	soma_nap =  1.2e-5  *0.5      //for RS  //MARIA 1e-5
	//----------------------------------------------------------------------------    
	//for sadp induction	  
	gCAN = 0//0.0001 	 		 	
	//=====================================================================================
 
	
	forsec somatic {
		nseg = 21

		insert pas    // leak conductance
		g_pas =  1/Rm_default
		e_pas = v_init
		Ra    = Ra_default //*1.35 xxx ????
		cm = Cm_default

		insert h     // h current 
		gbar_h  = soma_hbar
		H_K_h     = 8.8
		H_vhalf_h = -82

		insert Naf
		gnafbar_Naf = gna_default*5  // suspect
		insert kdr
		gkdrbar_kdr = gkdrbar_default

		


		insert kad  // proximal IA current  (K)
		gkabar_kad = kad_init

		insert cal 
		gcalbar_cal=soma_caL   // suspect

		insert can
		gcalbar_can=soma_caN   // suspect

		insert kca //Slow AHP Ca++ activated K current
		gbar_kca = soma_kca

		insert mykca //Fast AHP Ca++ activated K current
		gkbar_mykca = mykca_init

		insert cad

		insert Ks //ID current (K)
		gKsbar_Ks = soma_kdBG

		insert cat 
		gcatbar_cat = soma_caT 

		insert car
		gcabar_car=soma_car  // suspect
		insert nap	
		gnabar_nap=soma_nap*0.1

		insert ican  
		gbar_ican  = gCAN // suspect
	}


	
	forsec axonal {
		nseg=5

		insert Naf
		gnafbar_Naf = gna_default*10
		insert kdr
		gkdrbar_kdr = gkdrbar_default  
		insert pas  // leak conductance
		g_pas       = 1/Rm_default
		e_pas       = v_init
		Ra          = Ra_default
		cm          = Cm_default

		//$o1.tmpo2.color(1)

		//MARIA:
		
		//insert kad  
		//gkabar_kad     = kad_init*10
		//insert Ks
		//gKsbar_Ks = soma_kdBG
		
	}

	//Include all apical dendrites
	//  Configure apical trunk
	//access soma
	//distance()

	soma { distance() }


	forsec apical {
		insert Naf
		gnafbar_Naf = gna_default*0.2 
		insert kdr 
		gkdrbar_kdr=gkdrbar_default*0.001   

		insert pas // leak conductance

		e_pas          = v_init                 
		Ra             = Ra_default*0.5	//MARIA Ra_default
		cm             = Cm_dend 
		Rm_sigmoid_apical()         	 

		//add ICAN  in dendrites but smaller
		insert ican
		gbar_ican  = gCAN*0.1

		apical_mechanisms()   

		// Set the Na+ spike attenuation variable (linearly decreasing from soma to 300 um)
		max_ar2=0.95
		min_ar2=0.30
		decay_end=300.0
		decay_start=50.0
		m_ar2 = (max_ar2 - min_ar2)/(decay_start - decay_end)
		for (x) {
			xdist = distance(x)
			if (xdist < decay_start) { 
				ar2_Naf(x) = max_ar2 
			} else if (xdist > decay_end) {               
				ar2_Naf(x) = min_ar2 
			} else {               
				ar2_Naf(x) = max_ar2 + m_ar2*xdist
			}
		}
	}

	

	// Configure the basal dendrites

	//access soma
	//distance()

	soma { distance() }

	forsec basal {
		insert Naf
		gnafbar_Naf = gna_default*0.1
		insert kdr
		gkdrbar_kdr=gkdrbar_default*0.09  

		insert pas // passive properties
		e_pas          = v_init
		Ra             = Ra_default  
		cm             = Cm_dend
		Rm_sigmoid_basal()  

		//add ICAN  in dendrites but smaller
		insert ican
		gbar_ican  = gCAN*0.1

		// Set the Na+ spike attenuation variable (linearly decreasing from soma to 300 um)
		max_ar2=0.95
		min_ar2=0.30
		decay_end=50.0
		decay_start=20.0

		m_ar2 = (max_ar2 - min_ar2)/(decay_start - decay_end)
		for (x) {
			xdist = distance(x)
			if (xdist < decay_start) { 
				ar2_Naf(x) = max_ar2 
			} else if (xdist > decay_end) {               
				ar2_Naf(x) = min_ar2 
			} else {               
				ar2_Naf(x) = max_ar2 + m_ar2*xdist
			}
		}
	} 
   
	khbasal_fixed() // Configure basal dendrites //Outside of the basal loop???!?        

	forsec somatic { g_pas=1/Rm_default } // force Rm at all soma sections
    
	forall {
		if (ismembrane("Naf")) {ena = 55}
		if (ismembrane("k_ion")) { ek = -85}

		if(ismembrane("ca_ion")) {
			eca = 140
			cai0_ca_ion =  2.4e-6 // for pump  
			cao = 2
			//http://www.neuron.yale.edu/neuron/static/docs/help/neuron/neuron/nrnoc.html#ion_style
			ion_style("ca_ion",3,2,1,1,1)
		}
	}

} //END INIT() PROC


proc position() { local i // adapted from Migliore 2010
	soma for i = 0, n3d()-1 {
		pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
	}
	x = $1  y = $2  z = $3
}

proc cut_sections() {  
	forall {
		nseg=1+int(L/$1)
	}
}


/* ---------------------   PROCEEDURES USED IN CELL SETUP  -------------------------*/
/*-----------------------------------PFC-cell---------------------------------------*/

//Rm is sigmoidally decreased by half along the basal and apical dendrites and Cm is doubled, Ra is constant, kiki july 2008

/*  To make the distal membrane less conductive, vis-a-vis Stuart G.
and Spruston N., J. Neuroscience 18(10) 3501-3510, 1998, we deceay Rm 
from proximal to distal sigmoidally
*/

proc endpt() {
  	P=(n3d()-1)*$1
  	x_d3($1)=x3d(P)
  	y_d3($1)=y3d(P)
  	z_d3($1)=z3d(P)
}

proc fracpt() { local posn, A
  	A=$1
  	posn=$2
  	x_d3(posn)=x3d(i-1) + (x3d(i) - x3d(i-1))*A
  	y_d3(posn)=y3d(i-1) + (y3d(i) - y3d(i-1))*A
  	z_d3(posn)=z3d(i-1) + (z3d(i) - z3d(i-1))*A
}

proc map_segments_to_3d() {
	forall {
		insert d3
		i=0
		endpt(0)
		for (x) if (x > 0 && x < 1) {
			while (arc3d(i)/L < x) {
				i += 1
			}
			D=arc3d(i) - arc3d(i-1)
			if (D <= 0) {
				printf("\t\t * %s had a D < 0\n", secname())
			}
			alpha = (x*L - arc3d(i-1))/D
			fracpt(alpha,x)
		}
		endpt(1)
	}
}

proc Rm_sigmoid_basal() { local rm
	Rm_soma = Rm_default
	Rm_end=  Rm_default*0.5
	Rm_dhalf=10 
	Rm_steep=5

	for (x) {  
		xdist = distance(x)    // calc. path distance     
		rm = Rm_soma + (Rm_end - Rm_soma)/(1.0 + exp((Rm_dhalf-xdist)/Rm_steep))
		g_pas(x) = 1.0/rm
	}
}

proc Rm_sigmoid_apical() { local rm
	Rm_soma = Rm_default
	Rm_end=  Rm_default*0.5
	Rm_dhalf=300 //was 500
	Rm_steep=50

	for (x) {  
		xdist = distance(x)    
		rm = Rm_soma + (Rm_end - Rm_soma)/(1.0 + exp((Rm_dhalf-xdist)/Rm_steep))
		g_pas(x) = 1.0/rm
	}
}


//==================================================================
//June 2006
//In Day et al, 2005, J Neuroscience,  25(38):8776-8787
// Ih was increased by a factor of 10 towards the apical and basilar dendrites

/* 
===================================================================
In cortical layer V neurons, it is reported that K+ currents (A, D, and K) 
decrease with increasing distance 
based on Korngreen and Sakmann, 2000
All three types of K+ currents decrease with distance from the soma
*/


/* Inserting K(Ca++)-type channels and calcium pumps along the
apical trunk with maximum conductances in 100<xdist<500
*/


/* Inserting LVA Ca++ T-type channels along the apical trunk in
a linearly increasing manner, for xdist > 100 um 
*/


/* Inserting HVAm Ca++ R-type and HVA L-type channesls along
the apical trunk. The R-type current is distributed in a fixed
conductance while the L-type current is distributed in a
maximum fixed conductance for distances xdist > 50 um and in a very
small conductance for xdist < 50 um
*/

proc apical_mechanisms(){
	//Insert h-current, sigmoidally increasing in the dendrites
	gh_soma=soma_hbar
	gh_end=soma_hbar*10
	H_dhalf=300
	H_steep=50

	for (x) {  
		xdist = distance(x)  //calc. perpedicular distance
		insert h
		gbar_h(x) = gh_soma + (gh_end - gh_soma)/(1.0 + exp((H_dhalf-xdist)/H_steep))
	}

	kap_distal_maxfactor=1
	kap_distal_distance=100
	kad_distal_maxfactor=0.1
	kad_distal_distance=300  

	//for cortical cell, data is up to 400um
	for (x) {  
		xdist=distance(x) + 0.0000001 //Division by zero...
		fr1= kad_distal_distance/xdist
		insert kad
		insert Ks


		if (xdist < kap_distal_distance ) {
			gkabar_kad(x) = kad_init*kap_distal_maxfactor
			gKsbar_Ks(x) = soma_kdBG*kap_distal_maxfactor  
		} else if (xdist < kad_distal_distance ) {
			gkabar_kad(x) = kad_distal_maxfactor*kad_init*fr1
			gKsbar_Ks(x) = soma_kdBG*kad_distal_maxfactor*fr1
		} else {
			gkabar_kad(x) = kad_distal_maxfactor*kad_init
			gKsbar_Ks(x) = soma_kdBG*kad_distal_maxfactor  
		}
	}


	insert cad    // calsium pump/buffering mechanism

	//insert calcium mechanisms and persistent sodium

	insert car	
	insert nap
	insert cal
	insert can
	insert cat
	insert kca
	insert mykca

	for (x) {  
		xdist = distance(x)
		fr = xdist/200 //+ 0.00000001 //ivision by zerooo

		if (xdist < 200) {                	
			gcabar_car(x) = soma_car*0.5 	
			gnabar_nap(x) = soma_nap
			gcalbar_can(x) = soma_caN/30
			gcalbar_cal(x) soma_caL
			gcatbar_cat(x) = soma_caT
			gbar_kca = soma_kca*0.1
			gkbar_mykca = mykca_init*0.05
		} else {
			gcabar_car(x) = soma_car*fr   
			gnabar_nap(x) = soma_nap*fr*5
			gcalbar_can(x) = soma_caN*fr*3.2
			gcalbar_cal(x) = soma_caL/(30*fr)
			gcatbar_cat(x) = soma_caT*fr  			
			gbar_kca = soma_kca*0.001
			gkbar_mykca = mykca_init *0.001
		}
	}
}


/* Seting conductance values in all basal dendrites to be the
same as the values in the soma, except for the A
current conductance which is 0.6 times higher.  
*/

proc khbasal_fixed() { local i,x,d

	forsec basal {
		//increase H along the basal dendrites	
		insert h   //no gradient in somatosensory according to schiller
		gbar_h = soma_hbar
		insert kad
		insert can
		insert cad
		insert nap	
		gnabar_nap=soma_nap

		for (x) {  
			xdist = distance(x)
			fr = xdist/50
			if (xdist < 50) {        
				gcalbar_can(x) = soma_caN/30
				gkabar_kad(x) = kad_init*2 
			} else {
				gkabar_kad(x) = kad_init*5  
				gcalbar_can(x) = soma_caN*0.1
			}
		}
	}
}


/* The Na channels developed Mel and modified by Brannon,
Poirazi (hha2 and hha_old) both reduce activation as function
of voltage. In other words, they show actvity-dependent
attenuation of conductance.  Within both of these mechanisms,
ar2 ([0..1]) is used to inversely describe the intensity of
voltage-dependent attenuation. 0 is maximum attenuation, 1 is
no attenuation.

Within the cell model, we vary the amount of attenuation along
the apical trunk as a function of distance from the cell body
such that proximal sections show little attenuation and distal
sections show comparably more (with the exception of distal
obliques).

We typically decay ar2 linearly from proximal to distal with
the maximum and minimum values of decay as
parameters. Initialize these parameters: 
*/

/*
max_ar2=0
min_ar2=0
decay_start=0 
decay_end=0

strdef ar24_tmp_str
objref  strobj, ar24_f
strobj=new StringFunctions()
ar2_firsttime=1
*/

endtemplate PCcell

objref FL[56]
  //printf("RS1cell: setting filenames\n")
//FL[0]=new String("simple.hoc")
  FL[0]=new String("0-2c_axon.hoc")
  FL[1]=new String("0-2_axon.hoc")
  FL[2]=new String("0-2a_axon.hoc")
  FL[3]=new String("0-2b_axon.hoc") // the files 0-2b and 0-2a were forgotten in the listing that I found in Maria's script
  FL[4]=new String("30-3a_axon.hoc")
  FL[5]=new String("30-3b_axon.hoc")
  FL[6]=new String("30-3_axon.hoc")
  FL[7]=new String("33-3_axon.hoc")
  FL[8]=new String("35-2_axon.hoc")
  FL[9]=new String("35-3a_axon.hoc")
  FL[10]=new String("35-3_axon.hoc")
  FL[11]=new String("36-4a_axon.hoc") //changed to apic[1]!
  FL[12]=new String("36-4b_axon.hoc")
  FL[13]=new String("36-4_axon.hoc")
  FL[14]=new String("37-3_axon.hoc")
  FL[15]=new String("37-4a_axon.hoc")
  FL[16]=new String("37-4_axon.hoc")
  FL[17]=new String("39-4a_axon.hoc")
  FL[18]=new String("39-5_axon.hoc")
  FL[19]=new String("45-3a_axon.hoc")
  FL[20]=new String("45-3_axon.hoc")
  FL[21]=new String("45-4_axon.hoc")
  FL[22]=new String("47-2a_axon.hoc")//("ratpfc22.hoc")
  FL[23]=new String("47-2b_axon.hoc")
  FL[24]=new String("47-3-hf_axon.hoc")
  FL[25]=new String("48-3a_axon.hoc")
  FL[26]=new String("48-3b_axon.hoc")
  FL[27]=new String("48-3c_axon.hoc")
  FL[28]=new String("48-3d_axon.hoc")
  FL[29]=new String("48-4_axon.hoc")
  FL[30]=new String("A5-1B2_axon.hoc")
  FL[31]=new String("C3_4_axon.hoc")
  FL[32]=new String("C3_5_axon.hoc")//("ratpfc22.hoc")
  FL[33]=new String("C3_6_axon.hoc")
  FL[34]=new String("G3-1B-2_axon.hoc")
  FL[35]=new String("G4_1_axon.hoc")
  FL[36]=new String("G4_2_axon.hoc")
  FL[37]=new String("H2-3_axon.hoc")
  FL[38]=new String("h-2a_axon.hoc")
  FL[39]=new String("h-2b_axon.hoc")
  FL[40]=new String("h-2_axon.hoc")
  FL[41]=new String("j-2_axon.hoc")
  FL[42]=new String("j-3_axon.hoc")
  FL[43]=new String("j-3a_axon.hoc")
  FL[44]=new String("J3_axon.hoc")
  FL[45]=new String("L-2a_axon.hoc")
  FL[46]=new String("L-2b_axon.hoc")
  FL[47]=new String("L-2_axon.hoc")
  FL[48]=new String("n-3a_axon.hoc")
  FL[49]=new String("n-3b_axon.hoc")
  FL[50]=new String("n-3_axon.hoc")
  FL[51]=new String("q-3a_axon.hoc")
  FL[52]=new String("q-3b_axon.hoc")
  FL[53]=new String("q-3_axon.hoc")
  FL[54]=new String("q-4a_axon.hoc")
  FL[55]=new String("q-4_axon.hoc")


objref PCcells, PCgids
PCcells=new List()
PCgids=new Vector()
strdef filename,basename
basename="../../morphology/smith_new_axon/"
proc createPyrs(){ local i,host,gid localobj cell,mynil
	if(PARALLEL){
		{PC.barrier()}
		if(PC.id==0) {printf("initializing PCs...\n") }     
		for i=0, nPCcells-1{ //(i=PC.id;i<nPcells;i+=PC.nhost) { 
			host=i%PC.nhost
			gid=ind2gid(i,0)
			if(host==PC.id){
				PCgids.append(gid)  
				sprint(filename,"%s%s",basename,FL[num2ind(int(PcellIDlist.x[i]))].s)
				//sprint(filename,"%s%s",basename,FL[0].s)      
				//print "@ ",host, "GID ", gid, " Creating morph:"     
				cell = new PCcell(gid,filename)
				//cell.position((i+.5)*len/nPCcells, 0, 0)
				PC.set_gid2node(gid,PC.id)
				cell.axon {//synapse_source(gid)//,&v(1))
					PC.cell(gid,new NetCon(&v(1), mynil),1)
				}  
				PC.threshold(gid,-20)          
				PCcells.append(cell)  
			}    
		}
	}else{
		for i = 0, (nPCcells-1) {
			sprint(filename,"%s%s",basename,FL[num2ind(int(PcellIDlist.x[i]))].s)
			//sprint(filename,"%s%s",basename,FL[PYID].s)  
			cell = new PCcell(22,filename)
			PCcells.append(cell) 
			PCgids.append(i)
		}
	}

}

createPyrs()

//Create a list with segments for all neurons
objref PCsoma_list, PCbasal_list, PCapical_list, PCdend_list, PCcell_list, cell0_list
objref proxi_list[nPCcells], dist_list[nPCcells]

PCsoma_list = new SectionList()
PCbasal_list = new SectionList()
PCapical_list = new SectionList()
PCdend_list = new SectionList()
PCcell_list = new SectionList()
cell0_list=new SectionList()


for i=0, PCcells.count()-1 {

	PCcells.o(i).soma PCsoma_list.append()
	PCcells.o(i).DendNo=0
	forsec PCcells.o(i).basal {
		PCbasal_list.append()  
		PCdend_list.append()
		PCcells.o(i).DendNo+=1 
	}

	PCcells.o(i).ApicNo=0
	forsec PCcells.o(i).apical {
		PCapical_list.append()  
		PCdend_list.append()
		PCcells.o(i).ApicNo+=1 
	}
	forsec PCcells.o(i).all {
		PCcell_list.append()
	}
	
	PCcells.o(i).soma[0] {
		distance()
		proxi_list[i] = new SectionList()
		forsec PCcells.o(i).apical {
			xdist=distance(0.5)
			if(xdist<200) {proxi_list[i].append()}
		}
	}

	PCcells.o(i).soma[0]{
		distance()
		dist_list[i] = new SectionList()
		forsec PCcells.o(i).apical {
			xdist=distance(0.5)
			if(xdist>200) {dist_list[i].append()}
		}
	}


}

//printf("Applying PC current balance\n")
assert(xopen ("../../lib/current-balance.hoc"))
{current_balance(v_init)}
