strdef STDOUT, PPRINT_CMD,EXEC_CMD, PATH, STRING
PATH = "/home/cluster/stefanos/Documents/GitHub/prefrontal-micro/experiment/network/"
if(!load_file("/home/cluster/stefanos/Libraries/nrn/share/nrn/lib/hoc/nrngui.hoc")){print "ERROR	Failed to load NEURON!"}			//load main NEURON library
//{load_file("/home/cluster/stefanos/Libraries/nrn/share/nrn/lib/hoc/stdrun.hoc")}
objref PC
PC = new ParallelContext()
PARALLEL  = 0

steps_per_ms=10
dt=1/steps_per_ms
n=int(tstop/dt)
celsius=34
DEND_NSEG = 5

tstop = 700 
nPCcells = 1

v_init = -66 
objref cv
cv=new CVode(0)
if(cv.active(0)){print "ERRORRRR!"}	     //Do NOT use CVODE solver!
if(!cv.use_long_double(1)){print "ERRORRRR!"}//was cvode
if(!cv.cache_efficient(1)){print "ERRORRRR!"}

{xopen("pfc_pc_temp.hoc")}

//Balance each cell compartment to the prefered voltage and comply with NEURON initialization routines.
proc balance_compartments() {
	//Do not call finitialize with v_init argument, because it sets it in all cells
	// created up to this point!
	finitialize()
	forsec PCcell_list {
		for (x) {
			if (ismembrane("na_ion")) {e_passive(x)=v(x)+ina(x)/g_passive(x)} 
			if (ismembrane("k_ion")) {e_passive(x)=e_passive(x)+ik(x)/g_passive(x)} 
			if (ismembrane("ca_ion")) {e_passive(x)=e_passive(x)+ica(x)/g_passive(x)}
			if (ismembrane("in_ion")) {e_passive(x)=e_passive(x)+in(x)/g_passive(x)} //ican
			if (ismembrane("h")) {e_passive(x)=e_passive(x)+ihi(x)/g_passive(x)}

			if (ismembrane("ican")) { gbar_ican(x)= gbar_ican(x)  *0.0 }
		
		}
	}
	fcurrent()
	if (cv.active()) {
		cv.re_init()
	}       else {
		fcurrent()
	}
	frecord_init()
}


//-------------------Set synaptic weights
ampaweight=	0.00019		//0.00019//According to Wang(2008)

/*nmdaweights.x[0]=0.25		//1.1 ratio //NASSI
nmdaweights.x[1]=0.35		//1.5
nmdaweights.x[2]=0.47		//1.9
nmdaweights.x[3]=0.585		//2.3*/
nmdaweight = 0.25//0.05

taur_cad = 50//36 //SSS

objref nmdaVect
nmdaVect = new Vector()
nmdaVect.append(nmdaweight)
for i=1,40-1{
	nmdaVect.append(nmdaVect.x[i-1]+0.05)
}

objref r, PCv,PCi, vsoma
objref PCvd, PCvdd, PCvddd

synapses = 1 

objref NS[synapses]
objref isir
isir = new Random()
isir.normal(0,3)
NSnoise = 0 

/*
for k=1,synapses-1{
	print "Creating NS: ",k
	NS[k]=new NetStim()
	NS[k].interval=1//isir.repick()
	NS[k].number=10
	NS[k].start=NS[k-1].start + isir.repick()
	NS[k].noise=NSnoise
}
print "NS final is: ",NS[synapses-1].number
*/

r = new Random(0)
r.normal(0, 0.3)

objref rl
rl = new Random()
rl.uniform(0,1)

objref ampapr[synapses], nmdapr[synapses], nc1[synapses], nc2[synapses]
objref gabaa[4], gabab[4], ncga[4], ncgb[4]
orgloc = 70 //location indendrite (distance from soma in um)
loc = orgloc

objref wfVect
wfVect = new Vector()
//wfVect.append(1)
for i=1,80-1{
	wfVect.append(i*8)
}
nmdafactor = 2 
gababfactor = 12
gabaweight = 0.00083//XENIA GABAa //6.9e-4 			//According to Woo(2007)
gabaweightb = 1.05e-4
gabaweight_pv2pc_a = gabaweight    //3.8// GABA gia to RAND connectivity //OVERRIDED!!
gabaweight_pv2pc_b = gabaweightb   * gababfactor 
objref vcobj

//PCcells.o(0).soma{ vcobj = new VClamp(0.5)}
//vcobj.dur[0] = 1500
//vcobj.amp[0] = -66
		//for wf = 0, wfVect.size()-1 {
// Universal weight:
uniweight = 1
for isidelay = 1 , 100-1{
NS[0]=new NetStim()
NS[0].interval=isidelay//isir.repick()
NS[0].number=3//10
NS[0].start=500
NS[0].noise=NSnoise
for nmdaflag = 0, 1{
			print "---------------------"
			//print wfVect.x[wf]//, nmdaVect.x[nw]
			PID=0.5//rl.repick()

			for syn=0,synapses-1{
				print " Placing synapse : ",syn
				if (nmdaflag){
					PCcells.o(0).dend[0] nmdapr[syn] = new nmda_segev(PID)
					//nmdapr[syn].sid = syn 
					//nmdapr[syn].cellid = 0 
					//nmdapr[syn].srcgid = 1 */
					nc2[syn]=new NetCon(NS[0], nmdapr[syn])
					nc2[syn].delay=1
					nc2[syn].weight=uniweight
					//nc2[syn].weight= 0.25 * 25 * 2// excitbias * nmda bias
				}else{
					PCcells.o(0).dend[0] ampapr[syn] = new GLU(PID)
					nc1[syn]=new NetCon(NS[0], ampapr[syn])
					nc1[syn].delay=1
					nc1[syn].weight=uniweight
					//nc1[syn].weight=ampaweight// * wfVect.x[wf]//*nw*0.1
				}
				
			}
/*
			for syn=0,1-1{
				print " Placing INHIBITORY synapse : ",syn
				PCcells.o(0).soma gabaa[syn] = new GABAa(0.5)
				PCcells.o(0).soma gabab[syn] = new GABAb(0.5)
				ncga[syn]=new NetCon(NS[0], gabaa[syn])
				ncga[syn].delay=100
				ncga[syn].weight=gabaweight_pv2pc_a
				ncgb[syn]=new NetCon(NS[0], gabab[syn])
				ncgb[syn].delay=100
				ncgb[syn].weight=gabaweight_pv2pc_b
			}

			for syn=1,4-1{
				PID = rl.repick()
				print " Placing INHIBITORY synapse : ",syn," PID=",PID
				PCcells.o(0).dend[0] gabaa[syn] = new GABAa(PID)
				PCcells.o(0).dend[0] gabab[syn] = new GABAb(PID)
				ncga[syn]=new NetCon(NS[0], gabaa[syn])
				ncga[syn].delay=100
				ncga[syn].weight=gabaweight_pv2pc_a * 0.33
				ncgb[syn]=new NetCon(NS[0], gabab[syn])
				ncgb[syn].delay=100
				ncgb[syn].weight=gabaweight_pv2pc_b * 0.33
			}
*/

			PCv = new Vector()
			PCv.record(&PCcells.o(0).soma.v(.5)) 
/*
			PCi = new Vector()
			PCi.record(&gabab[0].i) 
			PCvd = new Vector()
			PCvd.record(&PCcells.o(0).dend.v(0.1)) 
			PCvdd = new Vector()
			PCvdd.record(&PCcells.o(0).dend.v(0.5)) 
			PCvddd = new Vector()
			PCvddd.record(&PCcells.o(0).dend.v(0.9)) 
*/

			balance_compartments()
			run()
			vsoma = new File()		

			//sprint(STRING,"DATA/nmda_w%07.3f_pid%.3f.txt", wfVect.x[wf], PID)

			if (nmdaflag) {
				sprint(STRING,"DATA/soma_NMDA_%d.txt",isidelay)
			}else{
				sprint(STRING,"DATA/soma_AMPA_%d.txt",isidelay)
			}
			print STRING
			vsoma.wopen(STRING)
			for j=0, PCv.size()-1 {
				vsoma.printf ("%f\n",PCv.x[j])
			}
			vsoma.close()
/*

			sprint(STRING,"DATA/gababi_%.3f.txt",gabaweight_pv2pc_a )
			print STRING
			vsoma.wopen(STRING)
			for j=0, PCi.size()-1 {
				vsoma.printf ("%f\n",PCi.x[j])
			}
			vsoma.close()


			vsoma = new File()		
			sprint(STRING,"DATA/dend/nmda_dend_%g.txt", 0.1)
			vsoma.wopen(STRING)
			for j=0, PCvd.size()-1 {
				vsoma.printf ("%f\n",PCvd.x[j])
			}
			vsoma.close()

			vsoma = new File()		
			sprint(STRING,"DATA/dend/nmda_dend_%g.txt", 0.5)
			vsoma.wopen(STRING)
			for j=0, PCvdd.size()-1 {
				vsoma.printf ("%f\n",PCvdd.x[j])
			}
			vsoma.close()

			vsoma = new File()		
			sprint(STRING,"DATA/dend/nmda_dend_%g.txt", 0.9)
			vsoma.wopen(STRING)
			for j=0, PCvddd.size()-1 {
				vsoma.printf ("%f\n",PCvddd.x[j])
			}
			vsoma.close()
*/

} //for nmdaflag
} // for isidelay
